/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        // "port": "udp"
        // "port": "fw"
        // , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "component-manager": {
        "components":
        [
            {
                "shared-library": "sawSensablePhantom",
                "class-name": "mtsSensableHD",
                "constructor-arg": {
                    "Name": "Sensable"
                },
                "configure-parameter": "sawSensablePhantomUSBTouch.json"
            }
            ,
            {
                "shared-library": "sawJoystick",
                "class-name": "mtsJoystick",
                "constructor-arg": {
                    "Name": "joystick"
                },
                "configure-parameter": "misc/sawJoystickConfiguration.json"
            }
        ]
    }
    ,
    "console-inputs":
    {
        "operator-present": {
            "component": "joystick",
            "interface": "OperatorPresent"
        }
        ,
        "clutch": {
            "component": "joystick",
            "interface": "Clutch"
        }
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",  // created previously using custom components
            "type": "MTM_GENERIC",
            "component": "Sensable",
            "interface": "arm"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM_Si",
            "serial": "334809"
            // ,
            // "socket-server": true,
            // "remote-ip": "127.0.0.1",
            // "port": 10001
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "configure-parameter": {
                "ignore-jaw": true,
                "align-mtm": false
                ,
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000],
                              [ 0.0000,  1.0000,  0.0000]]
            }
        }
    ]
}
