/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        //, "firewire-protocol": "sequential-read-write" // for debugging
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30924"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "292409",
            "base-frame": {
                "reference-frame": "Cart",
                "transform": [[ -1.0,  0.0,  0.0,  0.0],
                              [  0.0, -1.0,  0.0,  0.0 ],
                              [  0.0,  0.0,  1.0,  0.0 ],
                              [  0.0,  0.0,  0.0,  1.0 ]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
    ]
}
