/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // to use derived teleop with force feedback
            {
                "shared-library": "sawIntuitiveResearchKitDerivedTeleOperationPSM",
                "class-name": "mtsDerivedTeleOperationPSM",
                "constructor-arg": {
                    "Name": "MTML-PSM2",
                    "Period": 0.001
                }
            }
            ,
            // to use ForceDimension
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-MTML.json"
            }
        ]
    }
    ,
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "27374"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTML"
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            // this is where we tell the console to use our manually
            // loaded teleop, using "type"
            "type": "TELEOP_PSM_DERIVED",
            "MTM": "MTML",
            "PSM": "PSM2",
            "configure-parameter": {
                "ignore_jaw": true,
                "scale": 0.4,
                "rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
