/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // to use UR
            {
                "shared-library": "sawUniversalRobot",
                "class-name": "mtsUniversalRobotScriptRT",
                "constructor-arg": {
                    "Name": "UR"
                },
                "configure-parameter": "10.162.34.61" // JHU UR3 DHCP reserved IP is 10.162.34.61
            }
        ]
    }
    ,
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "UR",
            "type": "PSM_GENERIC",
            "component": "UR",
            "interface": "control"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "22723"
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTML",
            "PSM": "UR",
            "configure-parameter": {
                "ignore_jaw": true
            }
        }
    ]
}
