/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "IOs":
    [
        {
            "name": "IO_1",
            "port": "fw",
            "protocol": "broadcast-query-read-write",
            "configuration_files": ["io/sawRobotIO1394-MTMR-foot-pedals.xml"]
        }
    ]
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "IO": "IO_1",
            "serial": "28007",
            "base_frame": {
                "reference_frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,         -0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "IO": "IO_1",
            "serial": "28247",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "consoles":
    [
        {
            "name": "console1",
            "input_type": "PEDALS_ONLY",
            "IO": "IO_1",
            "teleop_PSMs":
            [
                {
                    "MTM": "MTMR",
                    "PSM": "PSM1"
                }
            ]
        }
    ]
}
