/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see https://dvrk.readthedocs.io
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "component_manager": {
        "components":
        [
            {
                "shared-library": "sawHaplyService",
                "class-name": "mtsHaply",
                "constructor-arg": {
                    "Name": "HaplyService"
                },
                "configure-parameter": "sawHaplyService-JHU-Imerse.json"
            }
        ]
    }
    ,
    "IOs":
    [
        {
            "name": "IO1",
            "port": "fw"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "28007",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,         -0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "27374",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM_GENERIC",
            "component": "HaplyService",
            "interface": "Left"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM_GENERIC",
            "component": "HaplyService",
            "interface": "Right"
        }
    ]
    ,
    "consoles": [
        {
            "name": "console",
            "input_type": "PEDALS_ONLY",
            "IO_pedals" :
            {
                "IO": "IO1",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json"
            }
            ,
            "teleop_PSMs":
            [
                {
                    "MTM": "MTML",
                    "PSM": "PSM2",
                    "configure_parameter": {
                        "ignore_jaw": false,
                        "start_gripper_threshold": 0.0,
                        "scale": 0.2
                    }
                }
                ,
                {
                    "MTM": "MTMR",
                    "PSM": "PSM1",
                    "configure_parameter": {
                        "ignore_jaw": false,
                        "start_gripper_threshold": 0.0,
                        "scale": 0.2
                    }
                }
            ]
        }
    ]
}
