/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see https://dvrk.readthedocs.io
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "IOs":
    [
        {
            "name": "IO1",
            "port": "fw"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "simulation": "KINEMATIC",
            "arm_file": "arm/suj-simulated.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm_file": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm_file": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "arm_file": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC",
            "arm_file": "arm/ECM_KIN_SIMULATED_STRAIGHT.json",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "22723",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "22403",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "consoles":
    [
        {
            "name": "console",
            "input_type": "PEDALS_GOOVIS_HEAD_SENSOR",
            "IO_pedals" :
            {
                "IO": "IO1",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json"
            }
            ,
            "HID_file": "hid/goovis-hd.json"
            ,
            "teleop_PSMs":
            [
                {
                    "MTM": "MTMR",
                    "PSM": "PSM1"
                }
                ,
                {
                    "MTM": "MTML",
                    "PSM": "PSM2"
                }
                ,
                {
                    "MTM": "MTML",
                    "PSM": "PSM3"
                }
            ]
            ,
            "teleop_ECMs":
            [
                {
                    "MTML": "MTML",
                    "MTMR": "MTMR",
                    "ECM": "ECM"
                }
            ]
        }
    ]
}
