{
    "$id" : "dvrk-system.schema.json",
    "$version" : 1,
    "IOs" : 
    [
        {
            "name" : "IO",
            "port" : "fw",
            "protocol" : "broadcast-read-write"
        }
    ],
    "arms" : 
    [
        {
            "IO" : "IO",
            "IO_file" : "/home/adeguet1/io_ws/src/dvrk/dvrk_config_jhu/jhu-dVRK/sawRobotIO1394-MTML-22723.json",
            "IO_gripper_file" : "/home/adeguet1/io_ws/src/dvrk/dvrk_config_jhu/jhu-dVRK/sawRobotIO1394-MTML-gripper-22723.json",
            "arm_file" : "/home/adeguet1/io_ws/src/dvrk/dvrk_config_jhu/jhu-dVRK/MTML-22723.json",
            "base_frame" : 
            {
                "reference_frame" : "HRSV",
                "transform" : 
                [
                    [
                        -1.0,
                        -8.6595605623549329e-17,
                        8.6595605623549341e-17,
                        0.0
                    ],
                    [
                        6.1629758220391547e-33,
                        0.70710678118654746,
                        0.70710678118654757,
                        0.40000000000000002
                    ],
                    [
                        -1.2246467991473535e-16,
                        0.70710678118654757,
                        -0.70710678118654746,
                        0.47499999999999998
                    ],
                    [
                        0.0,
                        0.0,
                        0.0,
                        1.0
                    ]
                ]
            },
            "name" : "MTML",
            "serial" : "22723",
            "type" : "MTM"
        },
        {
            "IO" : "IO",
            "IO_file" : "/home/adeguet1/io_ws/src/dvrk/dvrk_config_jhu/jhu-dVRK/sawRobotIO1394-PSM2-27374.json",
            "arm_file" : "/home/adeguet1/io_ws/src/dvrk/dvrk_config_jhu/jhu-dVRK/PSM2-27374.json",
            "base_frame" : 
            {
                "reference_frame" : "ECM",
                "transform" : 
                [
                    [
                        1.0,
                        0.0,
                        0.0,
                        0.0
                    ],
                    [
                        0.0,
                        -0.70710678118654746,
                        0.70710678118654768,
                        0.0
                    ],
                    [
                        0.0,
                        -0.70710678118654768,
                        -0.70710678118654746,
                        0.0
                    ],
                    [
                        0.0,
                        0.0,
                        0.0,
                        1.0
                    ]
                ]
            },
            "name" : "PSM2",
            "serial" : "27374",
            "type" : "PSM"
        }
    ],
    "consoles" : 
    [
        {
            "HID_file" : "hid/goovis-hd.json",
            "IO_pedals" : 
            {
                "IO" : "IO",
                "IO_file" : "io/sawRobotIO1394-MTML-foot-pedals-QLA1.json"
            },
            "input_type" : "PEDALS_GOOVIS_HEAD_SENSOR",
            "name" : "Console",
            "teleop_ECMs" : [],
            "teleop_PSMs" : 
            [
                {
                    "MTM" : "MTML",
                    "PSM" : "PSM2",
                    "configure_parameter" : 
                    {
                        "scale" : 0.5
                    }
                }
            ]
        }
    ]
}