/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "component-manager": {
        "components":
        [
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "omega7-11311.json"
            }
        ]
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",  // created previously using custom components
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTMR"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "292409"
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM1",
            "configure-parameter": {
                "ignore-jaw": true,
                "scale": 0.4,
                "rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
