/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM_SOCKET",
            "remote-ip": "127.0.0.1",
            "port": 10001
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30924"
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM1",
            "configure-parameter": {
                "ignore_jaw" : true
                ,
                "rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
