/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "IOs":
    [
        {
            "name": "IO_1",
            "port": "udpfw",
            "protocol": "broadcast-query-read-write"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Si",
            "arm_file": "suj-si.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "438610",
            "IO": "IO_1",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "28989",
            "IO": "IO_1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30924",
            "IO": "IO_1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "292409",
            "IO": "IO_1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "586288",
            "IO": "IO_1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "698534",
            "IO": "IO_1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
    ]
    ,
    "consoles":
    [
        {
            "name": "console",
            "input_type": "PEDALS_GOOVIS_HEAD_SENSOR",
            "IO_pedals" :
            {
                "IO": "IO_1",
                "IO_file": "io/sawRobotIO1394-MTML-foot-pedals.xml"
            }
            ,
            "HID_file": "hid/goovis-hd.json"
            ,
            "teleop_PSMs":
            [
                {
                    "MTM": "MTMR",
                    "PSM": "PSM1",
                    "configure_parameter": {
                        "use_MTM_velocity": true // false, this just for testing - true is default
                    }
                }
                ,
                {
                    "MTM": "MTML",
                    "PSM": "PSM2"
                }
                ,
                {
                    "MTM": "MTMR",
                    "PSM": "PSM3"
                }
            ]
            ,
            "teleop_ECMs":
            [
                {
                    "MTML": "MTML",
                    "MTMR": "MTMR",
                    "ECM": "ECM"
                }
            ]
        }
    ]
}
