/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml",
        "firewire-protocol": "sequential-read-write" // for debugging
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Si",
            "arm": "suj-si.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "292409"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "586288"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30924"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "438610"
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM1",
            "configure-parameter": {
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "MTM": "MTMR",
            "PSM": "PSM2",
            "configure-parameter": {
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
