/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals-DQLA.xml"
        // , "firewire-protocol": "sequential-read-write" // for debugging
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Si",
            "arm": "suj-si.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "438610",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "292409",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "586288",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "698534",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
    ]
}
