/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals-DQLA.xml"
        , "firewire-protocol": "broadcast-read-write" // for debugging,
        //, "port": "udp"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Si",
            "arm": "suj-si.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "438610",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
