/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals-DQLA.xml"
        , "firewire-protocol": "broadcast-read-write" // for debugging,
        //, "port": "udp"
    }
    ,
    "operator-present":
    {
        "hid": "hid/goovis-hd.json"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Fixed",
            "kinematic": "suj-fixed.json"
        }
        ,

        {
            "name": "ECM",
            "type": "ECM",
            "serial": "438610",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "28989",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30924",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "292409",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "586288",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM1",
            "configure-parameter": {
                "use-MTM-velocity": true // false, this just for testing - true is default
            }
        }
        ,
        {
            "MTM": "MTML",
            "PSM": "PSM2"
        }
    ]
    ,
    "ECM-teleop":
    {
        "MTM-left": "MTML",
        "MTM-right": "MTMR",
        "ECM": "ECM"
    }
}
