/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "base-arduino-mac": "2B:0D:3D:47:80:A3"
    ,
    "arms":
    [
        {
            "name": "ECM",
            "arduino-mac": "68:7E:57:32:FD:63",
            "serial_number": "0000",
            "primary_offsets": [0.5211392160972542, -2.3412033757314443, -3.0229780728541717, -2.339505967873306],
            "primary_scales": [-1.6858799692587158e-05, 7.114065469640816e-05, 9.257320694699654e-05, 7.123518567301949e-05],
            "secondary_offsets": [0.5125700338226576, -2.341520864604015, -3.0286885294230945, -2.3240776282138786],
            "secondary_scales": [-1.6827643920638795e-05, 7.112760828080241e-05, 9.274239916168339e-05, 7.076110182115086e-05],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.1471,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.5861,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.3302, "theta": 0.0000, "D": 0.1397,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.3302, "theta": 0.0000, "D": 0.0549,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.1352, "theta":-1.2217, "D": 0.0000, // -70 degrees = -1.2217 rad
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha":-1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    }
                ]
            },
            "world-origin-to-SUJ": {
                "Translation": [0.0 , 0.1262, 0.0],
                "Rotation" : [[ 0.0, -1.0,  0.0],
                              [ 1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            },
            "SUJ-tip-to-tool-origin": {
                "Translation": [0.8343, 0.0, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            }
        }
        ,
        {
            "name": "PSM1",
            "arduino-mac": "6A:2D:0C:DF:CB:9D",
            "serial_number": "0000",
            "primary_offsets": [0.513782968130982, -2.3498756816729003, -3.728162227630164, 2.32125734928165],
            "primary_scales": [-1.6919678855660344e-05, 7.062197757026209e-05, 7.136426814893805e-05, -7.160381773774961e-05],
            "secondary_offsets": [0.5218176, -2.3501624172958144, -3.72427952205781, 2.3069473777439047],
            "secondary_scales": [-1.6933333333333333e-05, 7.052885232866618e-05, 7.121166420819927e-05, -7.140801016279205e-05],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.1471,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.6654,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D": 0.1397,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D":-0.1301,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0490, "theta":-0.7854, "D": 0.0000, // -45 degrees = -0.7854 rad
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha":-1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    }
                ]
            },
            "world-origin-to-SUJ": {
                "Translation": [-0.2019 , -0.0757, 0.0],
                "Rotation" : [[-1.0,  0.0,  0.0],
                              [ 0.0, -1.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            },
            "SUJ-tip-to-tool-origin": {
                "Translation": [0.8343, 0.0, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            }
        }
        ,
        {
            "name": "PSM2",
            "arduino-mac": "48:CF:9D:1F:41:C9",
            "serial_number": "0000",
            "primary_offsets": [0.5221951480001414, -2.311625981055614, -0.9397776771768083, 2.3630666926328754],
            "primary_scales": [-1.7066874137992007e-05, 7.093923712807997e-05, 7.160059703219126e-05, -6.999598736296283e-05],
            "secondary_offsets": [0.5144447091256097, -2.30787910945442, -0.9538486506292135, 2.3578115540605085],
            "secondary_scales": [-1.7056619778044815e-05, 7.087101320316356e-05, 7.198664641614499e-05, -6.990086061957358e-05],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.1471,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.6654,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D": 0.1397,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D":-0.1301,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0490, "theta":-0.7854, "D": 0.0000, // -45 degrees = -0.7854 rad
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha":-1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    }
                ]
            },
            "world-origin-to-SUJ": {
                "Translation": [0.2019 , -0.0757, 0.0],
                "Rotation" : [[ 1.0,  0.0,  0.0],
                              [ 0.0,  1.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            },
            "SUJ-tip-to-tool-origin": {
                "Translation": [0.8343, 0.0, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            }
        }
        ,
        {
            "name": "PSM3",
            "arduino-mac": "B1:C8:4A:41:32:E3",
            "serial_number": "0000",
            "primary_offsets": [0.6161849926921953, -2.3348291775722343, 1.813108648800154, -3.0174420998710954,  1.8181237450279812],
            "primary_scales": [-1.7076878105817013e-05, 7.089956963916719e-05, -7.092639965920218e-05, 9.207012109144399e-05, -7.148769791575175e-05],
            "secondary_offsets": [0.6245586200842698, -2.324740839931776, 1.8124500997254442, -3.0210818242854227, 1.818670184691587],
            "secondary_scales": [-1.7093867041198502e-05, 7.066403756802821e-05, -7.106805463002685e-05, 9.19368548248172e-05, -7.179588524674737e-05],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.0455,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.5887,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.3429, "theta": 0.0000, "D":-0.2667,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D": 0.1397,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4572, "theta": 0.0000, "D":-0.1864,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0483, "theta":-0.2618, "D": 0.0000, // -15 degrees = -0.2618 rad
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha":-1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "passive",
                        "offset": 0.0
                    }
                ]
            },
            "world-origin-to-SUJ": {
                "Translation": [0.0 , -0.2776, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            },
            "SUJ-tip-to-tool-origin": {
                "Translation": [0.8343, 0.0, 0.0],
                "Rotation" : [[ 0.0,  1.0,  0.0],
                              [-1.0,  0.0,  0.0],
                              [ 0.0,  0.0,  1.0]]
            }
        }
    ]
}
