/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "IOs":
    [
        {
            "name": "IO1",
            "port": "udpfw",
            "protocol": "broadcast-query-read-write"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Si",
            "arm_file": "kinematic/suj-si.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "438610",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "28989",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30924",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        // ,
        // {
        //     "name": "PSM1",
        //     "type": "PSM",
        //     "arm_file": "PSM2-Endo360-586288.json",   // --------------- main change
        //     "serial": "334809",
        //     "IO": "IO1",
        //     "base_frame": {
        //         "component": "SUJ",
        //         "interface": "PSM1"
        //     }
        // }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "586288",
            "arm_file": "PSM2-Endo360-586288.json",   // --------------- main change
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
    ]
    ,
    "consoles":
    [
        {
            "name": "console",
            "input_type": "PEDALS_GOOVIS_HEAD_SENSOR",
            "IO_pedals" :
            {
                "IO": "IO1",
                "IO_file": "io/sawRobotIO1394-MTML-foot-pedals-QLA1.json"
            }
            ,
            "HID_file": "hid/goovis-hd.json"
            ,
            "teleop_PSMs":
            [
                {
                    "MTM": "MTML",
                    "PSM": "PSM2",
                    "configure_parameter": {
                        "scale": 0.4
                        , "ignore_jaw": true     // -------- important for the Endo 360 instrument
                    }
                }
                // ,
                // {
                //     "MTM": "MTML",
                //     "PSM": "PSM2",
                //     "configure_parameter": {
                //         "scale": 0.4
                //         , "ignore_jaw": true     // -------- important for the Endo 360 instrument
                //     }
                // }
            ]
            // ,
            // "teleop_ECMs":
            // [
            //     {
            //         "MTML": "MTML",
            //         "MTMR": "MTMR",
            //         "ECM": "ECM"
            //     }
            // ]
        }
    ]
}
