/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "32204"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "34863"
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM1"
        }
        ,
        {
            "MTM": "MTML",
            "PSM": "PSM2"
        }
    ]
    ,
    "ECM-teleop":
    {
        "MTM-left": "MTML",
        "MTM-right": "MTMR",
        "ECM": "ECM"
    }
}
