/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-MTMR.json"
            }
        ]
    }
    ,
    "io": {
        "footpedals": "io/sawRobotIO1394-PSM3-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "28613"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTMR"
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM3",
            "configure-parameter": {
                "ignore_jaw": true,
                "scale": 0.4,
                "rotation": [[ 0.0000, -1.0000,  0.0000],
                             [ 1.0000,  0.0000,  0.0000],
                             [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
