/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "34863"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738"
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "28613"
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM3"
        }
    ]
    ,
    "ECM-teleop":
    {
        "MTM-left": "MTML",
        "MTM-right": "MTMR",
        "ECM": "ECM"
    }
}
