/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
