/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        , "watchdog-timeout": 0.04 // in seconds
        , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "operator-present": {
        "io": "io/sawRobotIO1394-MTMR-dv-head-sensor.xml"
    }
    ,
    "endoscope-focus": {
        "io": "io/sawRobotIO1394-MTML-dv-endoscope-focus.xml"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "32204",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "34863",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM1",
            "PSM-base_frame": {
                "component": "ECM",
                "interface": "Arm"
            }
        }
        ,
        {
            "MTM": "MTML",
            "PSM": "PSM2",
            "PSM-base_frame": {
                "component": "ECM",
                "interface": "Arm"
            }
        }
    ]
    ,
    "ECM-teleop":
    {
        "MTM-left": "MTML",
        "MTM-right": "MTMR",
        "ECM": "ECM"
    }
}
