/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "IOs":
    [
        {
            "name": "IO_1",
            "port": "fw"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "IO": "IO_1",
            "IO_file": "sawRobotIO1394-SUJ.xml",
            "arm_file": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "IO": "IO_1",
            "serial": "49695",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "IO": "IO_1",
            "serial": "32204",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "IO": "IO_1",
            "serial": "29738",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
