/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "watchdog-timeout": 0.04 // in seconds
        , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "28613",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
