/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        , "watchdog-timeout": 0.04 // in seconds
        , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "operator-present": {
        "io": "io/sawRobotIO1394-MTMR-dv-head-sensor.xml"
    }
    ,
    "endoscope-focus": {
        "io": "io/sawRobotIO1394-MTML-dv-endoscope-focus.xml"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3-PSM2-is-reference.json"  // special case, we don't use the ECM!
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "32204",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTMR",
            "PSM": "PSM1",
            "PSM-base_frame": {
                "component": "PSM2",  // special case, we assume the PSM2 is holding a camera
                "interface": "Arm"
            }
        }
    ]
}
