/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */

{
    "reference-arm": "PSM2",
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "plug_number": 1,
            "serial_number": "SE054269",
            "brake_release_current": 1.5,
            "primary_offsets": [ -0.098948, -2.382, -3.0573, 6.2171, 0, 0],
            "primary_scales": [ 0.25466, 1.0656, 1.3612, -1.3712, -0, 0],
            "secondary_offsets": [ -0.11506, -2.3825, -3.0766, 6.2171, 0, 0],
            "secondary_scales": [ 0.25819, 1.065, 1.3684, -1.3705, -0, -0],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0896, "theta": 0.0000, "D": 0.0000,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.4166,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": 0.1429,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": -0.3459,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": -0.7853, "A": 0.0000, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": -0.0667, "theta": 0.0000, "D": 0.0000,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0000
                    }
                ]
            },
            "world-origin-to-SUJ": {
                "Translation": [0.0000 , 0.0000, 0.4300],
                "Rotation" : [[ 0.0000,  -1.0000,  0.0000],
                              [1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            },
            /* original offset provided by ISI, but we need to have z up for GC in ECM code
               "SUJ-tip-to-tool-origin": {
               "Translation": [0.6126, 0.0000,   0.1016],
               "Rotation" : [[ 0.0000, 1.0000,  0.0000],
               [ -1.0000,  0.0000,  0.0000],
               [ 0.0000,  0.0000,  1.0000]]
               } */
            /* offset with 45 degree rotation so z is defined up */
            "SUJ-tip-to-tool-origin": {
                "Translation": [0.6126, 0.0000,   0.1016],
                "Rotation" : [[  0.0,  0.707106781, -0.707106781],
                              [ -1.0,  0.0,          0.0        ],
                              [  0.0,  0.707106781,  0.707106781]]
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "plug_number": 2,
            "serial_number": "SE054268",
            "brake_release_current": 2.2,
            "primary_offsets": [ -0.042507, -2.367, -3.0435, 3.0712, -3.0841, -3.1136],
            "primary_scales": [ 0.25316, 1.0521, 1.3531, -1.3658, 1.3758, 1.3843],
            "secondary_offsets": [ -0.043368, -2.3817, -3.0503, 3.0668, -3.0885, -3.1098],
            "secondary_scales": [ 0.25318, 1.0556, 1.3588, -1.3636, 1.3798, 1.3844],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0896, "theta": 0.0000, "D": 0.0000,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.4166,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": 0.1429,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": -0.1302,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.4089,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": -1.5708, "A": 0.0000, "theta": 0.0000, "D": -0.1029,
                        "type": "revolute",
                        "mode": "active",
                        "offset": -1.5708
                    }
                ]
            },
            "world-origin-to-SUJ": {
                "Translation": [-0.1016 , -0.1016, 0.4300],
                "Rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            },
            "SUJ-tip-to-tool-origin": {
                "Translation": [0.4864, 0.0000, 0.1524],
                "Rotation" : [[ 0.0000, 1.0000,  0.0000],
                              [ -1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "plug_number": 3,
            "serial_number": "SE054270",
            "brake_release_current": 2.2,
            "primary_offsets": [ -0.041342, -2.3638, -3.0902, 3.0633, -3.188, -3.0826],
            "primary_scales": [ 0.25363, 1.0512, 1.3707, -1.3609, 1.4125, 1.3725],
            "secondary_offsets": [ -0.043388, -2.3841, -3.0788, 3.0448, -3.1888, -3.1138],
            "secondary_scales": [ 0.25359, 1.0611, 1.3684, -1.3547, 1.4135, 1.385],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0896, "theta": 0.0000, "D": 0.0000,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.4166,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": 0.1429,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": -0.1302,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.4089,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": -1.5708, "A": 0.0000, "theta": 0.0000, "D": -0.1029,
                        "type": "revolute",
                        "mode": "active",
                        "offset": -1.5708
                    }
                ]
            },
            "world-origin-to-SUJ": {
                "Translation": [0.1016 , -0.1016, 0.4300],
                "Rotation" : [[ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            },
            "SUJ-tip-to-tool-origin": {
                "Translation": [0.4864, 0.0000, 0.1524],
                "Rotation" : [[ 0.0000, 1.0000,  0.0000],
                              [ -1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "Motorized PSM",
            "plug_number": 4,
            "serial_number": "SE054271",
            "brake_release_current": 2.2,
            "primary_offsets": [ -0.344432, -2.3925, 3.0663, -3.1125, -3.1369, -3.0244],
            "primary_scales": [ 0.2621, 1.0596, -1.3679, 1.3863, 1.403, 1.3475],
            "secondary_offsets": [ -0.57684, -2.3956, 3.0827, -3.0812, -3.124, -3.0234],
            "secondary_scales": [ 0.2569, 1.0612, -1.3706, 1.3782, 1.404, 1.3493],
            "DH": {
                "links": [
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0896, "theta": 0.0000, "D": 0.0000,
                        "type": "prismatic",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.0000, "theta": 0.0000, "D": 0.3404,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.0
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.5842, "theta": 0.0000, "D": 0.1429,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": 0.0000, "A": 0.4318, "theta": 0.0000, "D": 0.2571,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 1.5708
                    },
                    {
                        "convention": "modified",
                        "alpha": 1.5708, "A": 0.0000, "theta": 0.0000, "D": 0.4089,
                        "type": "revolute",
                        "mode": "active",
                        "offset": 0.00
                    },
                    {
                        "convention": "modified",
                        "alpha": -1.5708, "A": 0.0000, "theta": 0.0000, "D": -0.1029,
                        "type": "revolute",
                        "mode": "active",
                        "offset": -1.5708
                    }
                ]
            },
            "world-origin-to-SUJ": {
                "Translation": [0.0000 , 0.0000, 0.1264],
                "Rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            },
            "SUJ-tip-to-tool-origin": {
                "Translation": [0.4864, 0.0000, 0.1524],
                "Rotation" : [[ 0.0000,  1.0000,  0.0000],
                              [ -1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
