/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see https://dvrk.readthedocs.io
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "IOs":
    [
        {
            "name": "IO1",
            "port": "fw"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "IO": "IO1",
            "serial": "34863"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "IO": "IO1",
            "serial": "32336"
        }
    ]
    ,
    "consoles": [
        {
            "name": "console1",
            "input_type": "PEDALS_ONLY",
            "IO_pedals":
            {
                "IO": "IO1",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json"
            }
        }
    ]
}
