/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see https://dvrk.readthedocs.io
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "IOs":
    [
        {
            "name": "IO1",
            "port": "fw",
            "protocol": "broadcast-query-read-write"
        }
    ]
    ,
    "ISI_focus_controller": {
        "IO": "IO1",
        "IO_file": "io/sawRobotIO1394-MTML-dv-endoscope-focus.json"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "IO": "IO1",
            "IO_file": "sawRobotIO1394-SUJ.json",
            "arm_file": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "32204",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "28613",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "34863",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "consoles":
    [
        {
            "name": "console",
            "input_type": "PEDALS_ISI_HEAD_SENSOR",
            "IO_pedals" :
            {
                "IO": "IO1",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json"
            }
            ,
            "IO_head_sensor":
            {
                "IO": "IO1",
                "IO_file": "io/sawRobotIO1394-MTMR-dv-head-sensor.json"
            }
            ,
            "teleop_PSMs":
            [
                {
                    "MTM": "MTMR",
                    "PSM": "PSM1",
                    "PSM_base_frame": {
                        "component": "ECM",
                        "interface": "Arm"
                    }
                }
                ,
                {
                    "MTM": "MTML",
                    "PSM": "PSM2",
                    "PSM_base_frame": {
                        "component": "ECM",
                        "interface": "Arm"
                    }
                }
                ,
                {
                    "MTM": "MTML",
                    "PSM": "PSM3",
                    "PSM_base_frame": {
                        "component": "ECM",
                        "interface": "Arm"
                    }
                }
            ]
            ,
            "teleop_ECMs":
            [
                {
                    "MTML": "MTML",
                    "MTMR": "MTMR",
                    "ECM": "ECM"
                }
            ]
        }
    ]
}
