/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see https://dvrk.readthedocs.io
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "IOs":
    [
        {
            "name": "IO1",
            "port": "fw",
            "protocol": "broadcast-query-read-write"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "IO": "IO1",
            "IO_file": "sawRobotIO1394-SUJ.json",
            "arm_file": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "32204",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "28613",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
