/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "IOs":
    [
        {
            "name": "IO_1",
            "port": "fw",
            "protocol": "broadcast-query-read-write"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "IO": "IO_1",
            "IO_file": "sawRobotIO1394-SUJ.xml",
            "arm_file": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "IO": "IO_1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738",
            "IO": "IO_1",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
